begintemplate celltemplate
	public  soma,dend,all,dends,basal,apcounter,apvec,nil,LOTlist,CClist,FocalList,Vvec,numdend,primedends//,FocalDends,NumberActiveDends
	objref all,dends,basal,apcounter,apvec,nil,LOTlist,CClist,Vvec[2]
proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create dend[40],soma

proc topol() { local i
  connect soma(0), dend(0.5)
  connect dend[1](0), soma(1)
  for i = 2, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  for i = 5, 8 connect dend[i](0), dend[i-1](1)
  connect dend[9](0), dend(0.5)
  for i = 10, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[1](1)
  for i = 13, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[5](1)
  for i = 20, 21 connect dend[i](0), dend[i-1](1)
  for i = 22, 23 connect dend[i](0), dend[i-16](1)
  connect dend[24](0), dend[4](1)
  connect dend[25](0), dend[10](1)
  connect dend[26](0), dend[25](1)
  connect dend[27](0), dend[9](1)
  connect dend[28](0), dend[12](1)
  connect dend[29](0), dend[28](1)
  connect dend[30](0), dend[14](1)
  connect dend[31](0), dend[16](1)
  connect dend[32](0), dend[15](1)
  connect dend[33](0), dend[13](1)
  connect dend[34](0), dend[17](1)
  connect dend[35](0), dend[20](1)
  connect dend[36](0), dend[19](1)
  for i = 37, 38 connect dend[i](0), dend[i-12](1)
  connect dend[39](0), dend[28](1)
  basic_shape()
}
proc shape3d_1() {
  dend {pt3dclear()
	pt3dadd(878, 972, 0, 0)
	pt3dadd(878, 971, 0, 0)
	pt3dadd(878, 970, 0, 0)
  }
  soma {pt3dclear()
	pt3dstyle(1, 878, 970, 0)
	pt3dadd(878, 969, 0, 0)
	pt3dadd(878, 968, 0, 0)
	pt3dadd(878, 967, 0, 0)
	pt3dadd(878, 966, 0, 0)
	pt3dadd(878, 965, 0, 0)
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  }
}
proc shape3d_2() {
  dend[6] {	pt3dadd(954, 788, 0, 0)
	pt3dadd(955, 787, 0, 0)
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  }
}
proc shape3d_3() {
  dend[7] {	pt3dadd(1016, 589, 0, 0)
	pt3dadd(1016, 588, 0, 0)
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  }
}
proc shape3d_4() {
  dend[8] {	pt3dadd(1138, 416, 0, 0)
	pt3dadd(1138, 415, 0, 0)
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  }
}
proc shape3d_5() {
  dend[8] {	pt3dadd(1131, 216, 0, 0)
	pt3dadd(1131, 215, 0, 0)
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  }
}
proc shape3d_6() {
  dend[11] {	pt3dadd(885, 1143, 0, 0)
	pt3dadd(885, 1144, 0, 0)
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  }
}
proc shape3d_7() {
  dend[11] {	pt3dadd(965, 1343, 0, 0)
	pt3dadd(965, 1344, 0, 0)
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  }
}
proc shape3d_8() {
  dend[14] {	pt3dadd(849, 862, 0, 0)
	pt3dadd(848, 861, 0, 0)
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  }
}
proc shape3d_9() {
  dend[17] {	pt3dadd(776, 665, 0, 0)
	pt3dadd(776, 664, 0, 0)
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  }
}
proc shape3d_10() {
  dend[18] {	pt3dadd(695, 466, 0, 0)
	pt3dadd(695, 465, 0, 0)
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  }
}
proc shape3d_11() {
  dend[18] {	pt3dadd(548, 289, 0, 0)
	pt3dadd(547, 288, 0, 0)
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  }
}
proc shape3d_12() {
  dend[19] {	pt3dadd(900, 694, 0, 0)
	pt3dadd(900, 693, 0, 0)
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  }
}
proc shape3d_13() {
  dend[20] {	pt3dadd(855, 495, 0, 0)
	pt3dadd(855, 494, 0, 0)
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  }
}
proc shape3d_14() {
  dend[21] {	pt3dadd(786, 296, 0, 0)
	pt3dadd(785, 295, 0, 0)
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  }
}
proc shape3d_15() {
  dend[22] {	pt3dadd(994, 573, 0, 0)
	pt3dadd(994, 572, 0, 0)
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  }
}
proc shape3d_16() {
  dend[22] {	pt3dadd(894, 373, 0, 0)
	pt3dadd(893, 372, 0, 0)
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  }
}
proc shape3d_17() {
  dend[23] {	pt3dadd(1037, 452, 0, 0)
	pt3dadd(1037, 451, 0, 0)
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  }
}
proc shape3d_18() {
  dend[24] {	pt3dadd(1065, 868, 0, 0)
	pt3dadd(1066, 867, 0, 0)
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  }
}
proc shape3d_19() {
  dend[26] {	pt3dadd(806, 1148, 0, 0)
	pt3dadd(806, 1149, 0, 0)
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  }
}
proc shape3d_20() {
  dend[27] {	pt3dadd(927, 1063, 0, 0)
	pt3dadd(927, 1064, 0, 0)
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  }
}
proc shape3d_21() {
  dend[28] {	pt3dadd(805, 891, 0, 0)
	pt3dadd(804, 891, 0, 0)
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  }
}
proc shape3d_22() {
  dend[28] {	pt3dadd(605, 858, 0, 0)
	pt3dadd(604, 857, 0, 0)
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  }
}
proc shape3d_23() {
  dend[29] {	pt3dadd(406, 775, 0, 0)
	pt3dadd(405, 775, 0, 0)
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  }
}
proc shape3d_24() {
  dend[30] {	pt3dadd(783, 789, 0, 0)
	pt3dadd(782, 788, 0, 0)
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  }
}
proc shape3d_25() {
  dend[30] {	pt3dadd(596, 612, 0, 0)
	pt3dadd(595, 611, 0, 0)
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  }
}
proc shape3d_26() {
  dend[31] {	pt3dadd(806, 762, 0, 0)
	pt3dadd(805, 761, 0, 0)
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  }
}
proc shape3d_27() {
  dend[31] {	pt3dadd(693, 565, 0, 0)
	pt3dadd(692, 564, 0, 0)
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  }
}
proc shape3d_28() {
  dend[32] {	pt3dadd(870, 761, 0, 0)
	pt3dadd(870, 760, 0, 0)
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  }
}
proc shape3d_29() {
  dend[33] {	pt3dadd(887, 782, 0, 0)
	pt3dadd(887, 781, 0, 0)
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  }
}
proc shape3d_30() {
  dend[34] {	pt3dadd(708, 406, 0, 0)
	pt3dadd(708, 405, 0, 0)
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  }
}
proc shape3d_31() {
  dend[34] {	pt3dadd(647, 233, 0, 0)
	pt3dadd(646, 233, 0, 0)
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  }
}
proc shape3d_32() {
  dend[35] {	pt3dadd(847, 268, 0, 0)
	pt3dadd(847, 267, 0, 0)
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  }
}
proc shape3d_33() {
  dend[36] {	pt3dadd(809, 379, 0, 0)
	pt3dadd(809, 378, 0, 0)
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  }
}
proc shape3d_34() {
  dend[38] {	pt3dadd(824, 1268, 0, 0)
	pt3dadd(824, 1269, 0, 0)
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  }
}
proc shape3d_35() {
  dend[39] {	pt3dadd(348, 806, 0, 0)
	pt3dadd(347, 805, 0, 0)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
}

objref all, dendritic_0
proc subsets() { local i
  objref all, dendritic_0
  all = new SectionList()
    for i=0, 59 dend[i] all.append()
    soma all.append()

  dendritic_0 = new SectionList()
    for i=0, 59 dend[i] dendritic_0.append()
    soma dendritic_0.append()

}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
}
	objref all,dends,basal,apcounter,apvec,nil,LOTlist,CClist,Vvec[2],primedends//,tcdends,ccdends,ccsyn,tcsyn,ccnetcon,tcnetcon,
	//objref all,dends,segdends,Esyn,STIMsyn,Esourse[2]
proc init(){
		all=new SectionList()
		dends = new SectionList()

		primedends=new SectionList()
		basal=new SectionList()
		topol()
		basic_shape()
		access dend[4]
		primedends.append()
		access dend[12]
		primedends.append()

		access dend[12]
		primedends.append()
		access dend[19]
		primedends.append()	
		
		for i=9,11{
			access dend[i]
			basal.append()
		}
		for i=25,27{
			access dend[i]
			basal.append()
		}		
		access dend[37]
		basal.append()
		access dend[38]
		basal.append()
		access soma
		diam=8
		access dend[2]
		diam=5
		access dend[12]
		diam=3
		distance()
		forall{

			dends.append()
		//	segdends.append()
			all.append()
			for i=0,n3d()-1{
				pt3dchange(i,x3d(i)*$1,y3d(i)*$2,z3d(i),diam3d(i))	
			}
			
			nseg=7
			if (diam<3){diam=1}
			//diam*=1.5
			cm=1
			Ra=100

		}
		
		soma dends.remove()	
		forsec basal {dends.remove()}
		//soma segdends.remove()		

		objref apcounter,apvec,nil
		NumberActiveDends=2
		numdend=0
		forsec dends{numdend=numdend+1}
		apvec=new Vector()
		access soma
		apcounter=new NetCon(&v(.5), nil)
		apcounter.threshold = -20 
		apcounter.record(apvec)
		//saving voltage vectors
		objref Vvec[numdend+1]//,spikevec[numdend+1]
		i=0
		forsec dends {
			Vvec[i]=new Vector()
			Vvec[i].record(&v(0.9))
		//	spikevec[i]=new Vector()
			i=i+1
		}
		Vvec[numdend]=new Vector()
		Vvec[numdend].record(&soma.v(0.5))
	forall L/=2.5
}
endtemplate celltemplate
